begin model
begin parameters
  t0_met_ACETYL_COA_cyt                       0.000000e+00
  t0_met_ACETYL_COA_mem                       0.000000e+00
  t0_met_ACETYL_COA_per                       0.000000e+00
  t0_met_ACETYL_COA_wall                      0.000000e+00
  t0_met_ACETYL_COA_ex                        0.000000e+00
  t0_met_ALLOLACTOSE_cyt                      0.000000e+00
  t0_met_ALLOLACTOSE_mem                      0.000000e+00
  t0_met_ALLOLACTOSE_per                      0.000000e+00
  t0_met_ALLOLACTOSE_wall                     0.000000e+00
  t0_met_ALLOLACTOSE_ex                       0.000000e+00
  t0_met_Alpha_lactose_cyt                    0.000000e+00
  t0_met_Alpha_lactose_mem                    0.000000e+00
  t0_met_Alpha_lactose_per                    2.000000e+02
  t0_met_Alpha_lactose_wall                   0.000000e+00
  t0_met_Alpha_lactose_ex                     0.000000e+00
  t0_met_Beta_D_Galactosides_cyt              0.000000e+00
  t0_met_Beta_D_Galactosides_mem              0.000000e+00
  t0_met_Beta_D_Galactosides_per              0.000000e+00
  t0_met_Beta_D_Galactosides_wall             0.000000e+00
  t0_met_Beta_D_Galactosides_ex               0.000000e+00
  t0_met_CO_A_cyt                             0.000000e+00
  t0_met_CO_A_mem                             0.000000e+00
  t0_met_CO_A_per                             0.000000e+00
  t0_met_CO_A_wall                            0.000000e+00
  t0_met_CO_A_ex                              0.000000e+00
  t0_met_CPD_15972_cyt                        0.000000e+00
  t0_met_CPD_15972_mem                        0.000000e+00
  t0_met_CPD_15972_per                        0.000000e+00
  t0_met_CPD_15972_wall                       0.000000e+00
  t0_met_CPD_15972_ex                         0.000000e+00
  t0_met_CPD_3561_cyt                         0.000000e+00
  t0_met_CPD_3561_mem                         0.000000e+00
  t0_met_CPD_3561_per                         0.000000e+00
  t0_met_CPD_3561_wall                        0.000000e+00
  t0_met_CPD_3561_ex                          0.000000e+00
  t0_met_CPD_3785_cyt                         0.000000e+00
  t0_met_CPD_3785_mem                         0.000000e+00
  t0_met_CPD_3785_per                         0.000000e+00
  t0_met_CPD_3785_wall                        0.000000e+00
  t0_met_CPD_3785_ex                          0.000000e+00
  t0_met_CPD_3801_cyt                         0.000000e+00
  t0_met_CPD_3801_mem                         0.000000e+00
  t0_met_CPD_3801_per                         0.000000e+00
  t0_met_CPD_3801_wall                        0.000000e+00
  t0_met_CPD_3801_ex                          0.000000e+00
  t0_met_D_ARABINOSE_cyt                      0.000000e+00
  t0_met_D_ARABINOSE_mem                      0.000000e+00
  t0_met_D_ARABINOSE_per                      0.000000e+00
  t0_met_D_ARABINOSE_wall                     0.000000e+00
  t0_met_D_ARABINOSE_ex                       0.000000e+00
  t0_met_Fructofuranose_cyt                   0.000000e+00
  t0_met_Fructofuranose_mem                   0.000000e+00
  t0_met_Fructofuranose_per                   0.000000e+00
  t0_met_Fructofuranose_wall                  0.000000e+00
  t0_met_Fructofuranose_ex                    0.000000e+00
  t0_met_GALACTOSE_cyt                        0.000000e+00
  t0_met_GALACTOSE_mem                        0.000000e+00
  t0_met_GALACTOSE_per                        0.000000e+00
  t0_met_GALACTOSE_wall                       0.000000e+00
  t0_met_GALACTOSE_ex                         0.000000e+00
  t0_met_Glucopyranose_cyt                    0.000000e+00
  t0_met_Glucopyranose_mem                    0.000000e+00
  t0_met_Glucopyranose_per                    0.000000e+00
  t0_met_Glucopyranose_wall                   0.000000e+00
  t0_met_Glucopyranose_ex                     0.000000e+00
  t0_met_MELIBIOSE_cyt                        0.000000e+00
  t0_met_MELIBIOSE_mem                        0.000000e+00
  t0_met_MELIBIOSE_per                        0.000000e+00
  t0_met_MELIBIOSE_wall                       0.000000e+00
  t0_met_MELIBIOSE_ex                         0.000000e+00
  t0_met_PROTON_cyt                           0.000000e+00
  t0_met_PROTON_mem                           0.000000e+00
  t0_met_PROTON_per                           1.000000e+02
  t0_met_PROTON_wall                          0.000000e+00
  t0_met_PROTON_ex                            0.000000e+00
  t0_met_WATER_cyt                            1.000000e+02
  t0_met_WATER_mem                            0.000000e+00
  t0_met_WATER_per                            0.000000e+00
  t0_met_WATER_wall                           0.000000e+00
  t0_met_WATER_ex                             0.000000e+00
  t0_met__6_Acetyl_Beta_D_Galactosides_cyt    0.000000e+00
  t0_met__6_Acetyl_Beta_D_Galactosides_mem    0.000000e+00
  t0_met__6_Acetyl_Beta_D_Galactosides_per    0.000000e+00
  t0_met__6_Acetyl_Beta_D_Galactosides_wall   0.000000e+00
  t0_met__6_Acetyl_Beta_D_Galactosides_ex     0.000000e+00
  t0_prot_lacA_cyt                            1.000000e+00
  t0_prot_lacA_mem                            0.000000e+00
  t0_prot_lacA_per                            0.000000e+00
  t0_prot_lacA_wall                           0.000000e+00
  t0_prot_lacA_ex                             0.000000e+00
  t0_prot_lacY_cyt                            0.000000e+00
  t0_prot_lacY_mem                            1.000000e+00
  t0_prot_lacY_per                            0.000000e+00
  t0_prot_lacY_wall                           0.000000e+00
  t0_prot_lacY_ex                             0.000000e+00
  t0_prot_lacZ_cyt                            1.000000e+00
  t0_prot_lacZ_mem                            0.000000e+00
  t0_prot_lacZ_per                            0.000000e+00
  t0_prot_lacZ_wall                           0.000000e+00
  t0_prot_lacZ_ex                             0.000000e+00
  t0_cplx_lacAx3_cyt                          1.000000e+00
  t0_cplx_lacZx4_cyt                          1.000000e+00
  fwd_BETAGALACTOSID_RXN                      1.000000e+00
  rvs_BETAGALACTOSID_RXN                      0.000000e+00
  fwd_RXN0_5363                               1.000000e+00
  rvs_RXN0_5363                               0.000000e+00
  fwd_RXN_17726                               1.000000e+00
  rvs_RXN_17726                               0.000000e+00
  fwd_RXN0_7219                               1.000000e+00
  rvs_RXN0_7219                               0.000000e+00
  fwd_GALACTOACETYLTRAN_RXN                   1.000000e+00
  rvs_GALACTOACETYLTRAN_RXN                   1.000000e+00
  fwd_TRANS_RXN_24                            1.000000e+00
  rvs_TRANS_RXN_24                            0.000000e+00
  fwd_TRANS_RXN_94                            1.000000e+00
  rvs_TRANS_RXN_94                            0.000000e+00
  fwd_RXN0_7215                               1.000000e+00
  rvs_RXN0_7215                               0.000000e+00
  fwd_RXN0_7217                               1.000000e+00
  rvs_RXN0_7217                               0.000000e+00
  fwd_RXN_17755                               1.000000e+00
  rvs_RXN_17755                               0.000000e+00
end parameters

begin molecule types
  met(name~ACETYL_COA~ALLOLACTOSE~Alpha_lactose~Beta_D_Galactosides~CO_A~CPD_15972~CPD_3561~CPD_3785~CPD_3801~D_ARABINOSE~Fructofuranose~GALACTOSE~Glucopyranose~MELIBIOSE~PROTON~WATER~_6_Acetyl_Beta_D_Galactosides,loc~cyt~mem~per~wall~ex,prot)
  prot(name~lacA~lacY~lacZ,loc~cyt~mem~per~wall~ex,dna,met,prot,rna,up,dw)
end molecule types

begin observables
  Molecules obs_met_ACETYL_COA_cyt                      met(name~ACETYL_COA,loc~cyt,prot)
  Molecules obs_met_ACETYL_COA_per                      met(name~ACETYL_COA,loc~per,prot)
  Molecules obs_met_ACETYL_COA_ex                       met(name~ACETYL_COA,loc~ex,prot)
  Molecules obs_met_ALLOLACTOSE_cyt                     met(name~ALLOLACTOSE,loc~cyt,prot)
  Molecules obs_met_ALLOLACTOSE_per                     met(name~ALLOLACTOSE,loc~per,prot)
  Molecules obs_met_ALLOLACTOSE_ex                      met(name~ALLOLACTOSE,loc~ex,prot)
  Molecules obs_met_Alpha_lactose_cyt                   met(name~Alpha_lactose,loc~cyt,prot)
  Molecules obs_met_Alpha_lactose_per                   met(name~Alpha_lactose,loc~per,prot)
  Molecules obs_met_Alpha_lactose_ex                    met(name~Alpha_lactose,loc~ex,prot)
  Molecules obs_met_Beta_D_Galactosides_cyt             met(name~Beta_D_Galactosides,loc~cyt,prot)
  Molecules obs_met_Beta_D_Galactosides_per             met(name~Beta_D_Galactosides,loc~per,prot)
  Molecules obs_met_Beta_D_Galactosides_ex              met(name~Beta_D_Galactosides,loc~ex,prot)
  Molecules obs_met_CO_A_cyt                            met(name~CO_A,loc~cyt,prot)
  Molecules obs_met_CO_A_per                            met(name~CO_A,loc~per,prot)
  Molecules obs_met_CO_A_ex                             met(name~CO_A,loc~ex,prot)
  Molecules obs_met_CPD_15972_cyt                       met(name~CPD_15972,loc~cyt,prot)
  Molecules obs_met_CPD_15972_per                       met(name~CPD_15972,loc~per,prot)
  Molecules obs_met_CPD_15972_ex                        met(name~CPD_15972,loc~ex,prot)
  Molecules obs_met_CPD_3561_cyt                        met(name~CPD_3561,loc~cyt,prot)
  Molecules obs_met_CPD_3561_per                        met(name~CPD_3561,loc~per,prot)
  Molecules obs_met_CPD_3561_ex                         met(name~CPD_3561,loc~ex,prot)
  Molecules obs_met_CPD_3785_cyt                        met(name~CPD_3785,loc~cyt,prot)
  Molecules obs_met_CPD_3785_per                        met(name~CPD_3785,loc~per,prot)
  Molecules obs_met_CPD_3785_ex                         met(name~CPD_3785,loc~ex,prot)
  Molecules obs_met_CPD_3801_cyt                        met(name~CPD_3801,loc~cyt,prot)
  Molecules obs_met_CPD_3801_per                        met(name~CPD_3801,loc~per,prot)
  Molecules obs_met_CPD_3801_ex                         met(name~CPD_3801,loc~ex,prot)
  Molecules obs_met_D_ARABINOSE_cyt                     met(name~D_ARABINOSE,loc~cyt,prot)
  Molecules obs_met_D_ARABINOSE_per                     met(name~D_ARABINOSE,loc~per,prot)
  Molecules obs_met_D_ARABINOSE_ex                      met(name~D_ARABINOSE,loc~ex,prot)
  Molecules obs_met_Fructofuranose_cyt                  met(name~Fructofuranose,loc~cyt,prot)
  Molecules obs_met_Fructofuranose_per                  met(name~Fructofuranose,loc~per,prot)
  Molecules obs_met_Fructofuranose_ex                   met(name~Fructofuranose,loc~ex,prot)
  Molecules obs_met_GALACTOSE_cyt                       met(name~GALACTOSE,loc~cyt,prot)
  Molecules obs_met_GALACTOSE_per                       met(name~GALACTOSE,loc~per,prot)
  Molecules obs_met_GALACTOSE_ex                        met(name~GALACTOSE,loc~ex,prot)
  Molecules obs_met_Glucopyranose_cyt                   met(name~Glucopyranose,loc~cyt,prot)
  Molecules obs_met_Glucopyranose_per                   met(name~Glucopyranose,loc~per,prot)
  Molecules obs_met_Glucopyranose_ex                    met(name~Glucopyranose,loc~ex,prot)
  Molecules obs_met_MELIBIOSE_cyt                       met(name~MELIBIOSE,loc~cyt,prot)
  Molecules obs_met_MELIBIOSE_per                       met(name~MELIBIOSE,loc~per,prot)
  Molecules obs_met_MELIBIOSE_ex                        met(name~MELIBIOSE,loc~ex,prot)
  Molecules obs_met_PROTON_cyt                          met(name~PROTON,loc~cyt,prot)
  Molecules obs_met_PROTON_per                          met(name~PROTON,loc~per,prot)
  Molecules obs_met_PROTON_ex                           met(name~PROTON,loc~ex,prot)
  Molecules obs_met_WATER_cyt                           met(name~WATER,loc~cyt,prot)
  Molecules obs_met_WATER_per                           met(name~WATER,loc~per,prot)
  Molecules obs_met_WATER_ex                            met(name~WATER,loc~ex,prot)
  Molecules obs_met__6_Acetyl_Beta_D_Galactosides_cyt   met(name~_6_Acetyl_Beta_D_Galactosides,loc~cyt,prot)
  Molecules obs_met__6_Acetyl_Beta_D_Galactosides_per   met(name~_6_Acetyl_Beta_D_Galactosides,loc~per,prot)
  Molecules obs_met__6_Acetyl_Beta_D_Galactosides_ex    met(name~_6_Acetyl_Beta_D_Galactosides,loc~ex,prot)
end observables

begin species
  met(name~ACETYL_COA,loc~cyt,prot)                                                                                                                                                                         t0_met_ACETYL_COA_cyt
  met(name~ACETYL_COA,loc~mem,prot)                                                                                                                                                                         t0_met_ACETYL_COA_mem
  met(name~ACETYL_COA,loc~per,prot)                                                                                                                                                                         t0_met_ACETYL_COA_per
  met(name~ACETYL_COA,loc~wall,prot)                                                                                                                                                                        t0_met_ACETYL_COA_wall
  met(name~ACETYL_COA,loc~ex,prot)                                                                                                                                                                          t0_met_ACETYL_COA_ex
  met(name~ALLOLACTOSE,loc~cyt,prot)                                                                                                                                                                        t0_met_ALLOLACTOSE_cyt
  met(name~ALLOLACTOSE,loc~mem,prot)                                                                                                                                                                        t0_met_ALLOLACTOSE_mem
  met(name~ALLOLACTOSE,loc~per,prot)                                                                                                                                                                        t0_met_ALLOLACTOSE_per
  met(name~ALLOLACTOSE,loc~wall,prot)                                                                                                                                                                       t0_met_ALLOLACTOSE_wall
  met(name~ALLOLACTOSE,loc~ex,prot)                                                                                                                                                                         t0_met_ALLOLACTOSE_ex
  met(name~Alpha_lactose,loc~cyt,prot)                                                                                                                                                                      t0_met_Alpha_lactose_cyt
  met(name~Alpha_lactose,loc~mem,prot)                                                                                                                                                                      t0_met_Alpha_lactose_mem
  met(name~Alpha_lactose,loc~per,prot)                                                                                                                                                                      t0_met_Alpha_lactose_per
  met(name~Alpha_lactose,loc~wall,prot)                                                                                                                                                                     t0_met_Alpha_lactose_wall
  met(name~Alpha_lactose,loc~ex,prot)                                                                                                                                                                       t0_met_Alpha_lactose_ex
  met(name~Beta_D_Galactosides,loc~cyt,prot)                                                                                                                                                                t0_met_Beta_D_Galactosides_cyt
  met(name~Beta_D_Galactosides,loc~mem,prot)                                                                                                                                                                t0_met_Beta_D_Galactosides_mem
  met(name~Beta_D_Galactosides,loc~per,prot)                                                                                                                                                                t0_met_Beta_D_Galactosides_per
  met(name~Beta_D_Galactosides,loc~wall,prot)                                                                                                                                                               t0_met_Beta_D_Galactosides_wall
  met(name~Beta_D_Galactosides,loc~ex,prot)                                                                                                                                                                 t0_met_Beta_D_Galactosides_ex
  met(name~CO_A,loc~cyt,prot)                                                                                                                                                                               t0_met_CO_A_cyt
  met(name~CO_A,loc~mem,prot)                                                                                                                                                                               t0_met_CO_A_mem
  met(name~CO_A,loc~per,prot)                                                                                                                                                                               t0_met_CO_A_per
  met(name~CO_A,loc~wall,prot)                                                                                                                                                                              t0_met_CO_A_wall
  met(name~CO_A,loc~ex,prot)                                                                                                                                                                                t0_met_CO_A_ex
  met(name~CPD_15972,loc~cyt,prot)                                                                                                                                                                          t0_met_CPD_15972_cyt
  met(name~CPD_15972,loc~mem,prot)                                                                                                                                                                          t0_met_CPD_15972_mem
  met(name~CPD_15972,loc~per,prot)                                                                                                                                                                          t0_met_CPD_15972_per
  met(name~CPD_15972,loc~wall,prot)                                                                                                                                                                         t0_met_CPD_15972_wall
  met(name~CPD_15972,loc~ex,prot)                                                                                                                                                                           t0_met_CPD_15972_ex
  met(name~CPD_3561,loc~cyt,prot)                                                                                                                                                                           t0_met_CPD_3561_cyt
  met(name~CPD_3561,loc~mem,prot)                                                                                                                                                                           t0_met_CPD_3561_mem
  met(name~CPD_3561,loc~per,prot)                                                                                                                                                                           t0_met_CPD_3561_per
  met(name~CPD_3561,loc~wall,prot)                                                                                                                                                                          t0_met_CPD_3561_wall
  met(name~CPD_3561,loc~ex,prot)                                                                                                                                                                            t0_met_CPD_3561_ex
  met(name~CPD_3785,loc~cyt,prot)                                                                                                                                                                           t0_met_CPD_3785_cyt
  met(name~CPD_3785,loc~mem,prot)                                                                                                                                                                           t0_met_CPD_3785_mem
  met(name~CPD_3785,loc~per,prot)                                                                                                                                                                           t0_met_CPD_3785_per
  met(name~CPD_3785,loc~wall,prot)                                                                                                                                                                          t0_met_CPD_3785_wall
  met(name~CPD_3785,loc~ex,prot)                                                                                                                                                                            t0_met_CPD_3785_ex
  met(name~CPD_3801,loc~cyt,prot)                                                                                                                                                                           t0_met_CPD_3801_cyt
  met(name~CPD_3801,loc~mem,prot)                                                                                                                                                                           t0_met_CPD_3801_mem
  met(name~CPD_3801,loc~per,prot)                                                                                                                                                                           t0_met_CPD_3801_per
  met(name~CPD_3801,loc~wall,prot)                                                                                                                                                                          t0_met_CPD_3801_wall
  met(name~CPD_3801,loc~ex,prot)                                                                                                                                                                            t0_met_CPD_3801_ex
  met(name~D_ARABINOSE,loc~cyt,prot)                                                                                                                                                                        t0_met_D_ARABINOSE_cyt
  met(name~D_ARABINOSE,loc~mem,prot)                                                                                                                                                                        t0_met_D_ARABINOSE_mem
  met(name~D_ARABINOSE,loc~per,prot)                                                                                                                                                                        t0_met_D_ARABINOSE_per
  met(name~D_ARABINOSE,loc~wall,prot)                                                                                                                                                                       t0_met_D_ARABINOSE_wall
  met(name~D_ARABINOSE,loc~ex,prot)                                                                                                                                                                         t0_met_D_ARABINOSE_ex
  met(name~Fructofuranose,loc~cyt,prot)                                                                                                                                                                     t0_met_Fructofuranose_cyt
  met(name~Fructofuranose,loc~mem,prot)                                                                                                                                                                     t0_met_Fructofuranose_mem
  met(name~Fructofuranose,loc~per,prot)                                                                                                                                                                     t0_met_Fructofuranose_per
  met(name~Fructofuranose,loc~wall,prot)                                                                                                                                                                    t0_met_Fructofuranose_wall
  met(name~Fructofuranose,loc~ex,prot)                                                                                                                                                                      t0_met_Fructofuranose_ex
  met(name~GALACTOSE,loc~cyt,prot)                                                                                                                                                                          t0_met_GALACTOSE_cyt
  met(name~GALACTOSE,loc~mem,prot)                                                                                                                                                                          t0_met_GALACTOSE_mem
  met(name~GALACTOSE,loc~per,prot)                                                                                                                                                                          t0_met_GALACTOSE_per
  met(name~GALACTOSE,loc~wall,prot)                                                                                                                                                                         t0_met_GALACTOSE_wall
  met(name~GALACTOSE,loc~ex,prot)                                                                                                                                                                           t0_met_GALACTOSE_ex
  met(name~Glucopyranose,loc~cyt,prot)                                                                                                                                                                      t0_met_Glucopyranose_cyt
  met(name~Glucopyranose,loc~mem,prot)                                                                                                                                                                      t0_met_Glucopyranose_mem
  met(name~Glucopyranose,loc~per,prot)                                                                                                                                                                      t0_met_Glucopyranose_per
  met(name~Glucopyranose,loc~wall,prot)                                                                                                                                                                     t0_met_Glucopyranose_wall
  met(name~Glucopyranose,loc~ex,prot)                                                                                                                                                                       t0_met_Glucopyranose_ex
  met(name~MELIBIOSE,loc~cyt,prot)                                                                                                                                                                          t0_met_MELIBIOSE_cyt
  met(name~MELIBIOSE,loc~mem,prot)                                                                                                                                                                          t0_met_MELIBIOSE_mem
  met(name~MELIBIOSE,loc~per,prot)                                                                                                                                                                          t0_met_MELIBIOSE_per
  met(name~MELIBIOSE,loc~wall,prot)                                                                                                                                                                         t0_met_MELIBIOSE_wall
  met(name~MELIBIOSE,loc~ex,prot)                                                                                                                                                                           t0_met_MELIBIOSE_ex
  met(name~PROTON,loc~cyt,prot)                                                                                                                                                                             t0_met_PROTON_cyt
  met(name~PROTON,loc~mem,prot)                                                                                                                                                                             t0_met_PROTON_mem
  met(name~PROTON,loc~per,prot)                                                                                                                                                                             t0_met_PROTON_per
  met(name~PROTON,loc~wall,prot)                                                                                                                                                                            t0_met_PROTON_wall
  met(name~PROTON,loc~ex,prot)                                                                                                                                                                              t0_met_PROTON_ex
  met(name~WATER,loc~cyt,prot)                                                                                                                                                                              t0_met_WATER_cyt
  met(name~WATER,loc~mem,prot)                                                                                                                                                                              t0_met_WATER_mem
  met(name~WATER,loc~per,prot)                                                                                                                                                                              t0_met_WATER_per
  met(name~WATER,loc~wall,prot)                                                                                                                                                                             t0_met_WATER_wall
  met(name~WATER,loc~ex,prot)                                                                                                                                                                               t0_met_WATER_ex
  met(name~_6_Acetyl_Beta_D_Galactosides,loc~cyt,prot)                                                                                                                                                      t0_met__6_Acetyl_Beta_D_Galactosides_cyt
  met(name~_6_Acetyl_Beta_D_Galactosides,loc~mem,prot)                                                                                                                                                      t0_met__6_Acetyl_Beta_D_Galactosides_mem
  met(name~_6_Acetyl_Beta_D_Galactosides,loc~per,prot)                                                                                                                                                      t0_met__6_Acetyl_Beta_D_Galactosides_per
  met(name~_6_Acetyl_Beta_D_Galactosides,loc~wall,prot)                                                                                                                                                     t0_met__6_Acetyl_Beta_D_Galactosides_wall
  met(name~_6_Acetyl_Beta_D_Galactosides,loc~ex,prot)                                                                                                                                                       t0_met__6_Acetyl_Beta_D_Galactosides_ex
  prot(name~lacA,loc~cyt,dna,met,prot,rna,up,dw)                                                                                                                                                            t0_prot_lacA_cyt
  prot(name~lacA,loc~mem,dna,met,prot,rna,up,dw)                                                                                                                                                            t0_prot_lacA_mem
  prot(name~lacA,loc~per,dna,met,prot,rna,up,dw)                                                                                                                                                            t0_prot_lacA_per
  prot(name~lacA,loc~wall,dna,met,prot,rna,up,dw)                                                                                                                                                           t0_prot_lacA_wall
  prot(name~lacA,loc~ex,dna,met,prot,rna,up,dw)                                                                                                                                                             t0_prot_lacA_ex
  prot(name~lacY,loc~cyt,dna,met,prot,rna,up,dw)                                                                                                                                                            t0_prot_lacY_cyt
  prot(name~lacY,loc~mem,dna,met,prot,rna,up,dw)                                                                                                                                                            t0_prot_lacY_mem
  prot(name~lacY,loc~per,dna,met,prot,rna,up,dw)                                                                                                                                                            t0_prot_lacY_per
  prot(name~lacY,loc~wall,dna,met,prot,rna,up,dw)                                                                                                                                                           t0_prot_lacY_wall
  prot(name~lacY,loc~ex,dna,met,prot,rna,up,dw)                                                                                                                                                             t0_prot_lacY_ex
  prot(name~lacZ,loc~cyt,dna,met,prot,rna,up,dw)                                                                                                                                                            t0_prot_lacZ_cyt
  prot(name~lacZ,loc~mem,dna,met,prot,rna,up,dw)                                                                                                                                                            t0_prot_lacZ_mem
  prot(name~lacZ,loc~per,dna,met,prot,rna,up,dw)                                                                                                                                                            t0_prot_lacZ_per
  prot(name~lacZ,loc~wall,dna,met,prot,rna,up,dw)                                                                                                                                                           t0_prot_lacZ_wall
  prot(name~lacZ,loc~ex,dna,met,prot,rna,up,dw)                                                                                                                                                             t0_prot_lacZ_ex
  prot(name~lacA,loc~cyt,dna,met,prot,rna,up,dw!1).prot(name~lacA,loc~cyt,dna,met,prot,rna,up!1,dw!2).prot(name~lacA,loc~cyt,dna,met,prot,rna,up!2,dw)                                                      t0_cplx_lacAx3_cyt
  prot(name~lacZ,loc~cyt,dna,met,prot,rna,up,dw!1).prot(name~lacZ,loc~cyt,dna,met,prot,rna,up!1,dw!2).prot(name~lacZ,loc~cyt,dna,met,prot,rna,up!2,dw!3).prot(name~lacZ,loc~cyt,dna,met,prot,rna,up!3,dw)   t0_cplx_lacZx4_cyt
end species

begin reaction rules
  BETAGALACTOSID_RXN:     prot(name~lacZ,loc~cyt,up,dw!1).prot(name~lacZ,loc~cyt,up!1,dw!2).prot(name~lacZ,loc~cyt,up!2,dw!3).prot(name~lacZ,loc~cyt,up!3,dw) + met(name~CPD_15972,loc~cyt,prot) + met(name~WATER,loc~cyt,prot) <-> prot(name~lacZ,loc~cyt,up,dw!1).prot(name~lacZ,loc~cyt,up!1,dw!2).prot(name~lacZ,loc~cyt,up!2,dw!3).prot(name~lacZ,loc~cyt,up!3,dw) + met(name~GALACTOSE,loc~cyt,prot) + met(name~Glucopyranose,loc~cyt,prot)    fwd_BETAGALACTOSID_RXN, rvs_BETAGALACTOSID_RXN
  RXN0_5363:              prot(name~lacZ,loc~cyt,up,dw!1).prot(name~lacZ,loc~cyt,up!1,dw!2).prot(name~lacZ,loc~cyt,up!2,dw!3).prot(name~lacZ,loc~cyt,up!3,dw) + met(name~Alpha_lactose,loc~cyt,prot) <-> prot(name~lacZ,loc~cyt,up,dw!1).prot(name~lacZ,loc~cyt,up!1,dw!2).prot(name~lacZ,loc~cyt,up!2,dw!3).prot(name~lacZ,loc~cyt,up!3,dw) + met(name~ALLOLACTOSE,loc~cyt,prot)    fwd_RXN0_5363, rvs_RXN0_5363
  RXN_17726:              prot(name~lacZ,loc~cyt,up,dw!1).prot(name~lacZ,loc~cyt,up!1,dw!2).prot(name~lacZ,loc~cyt,up!2,dw!3).prot(name~lacZ,loc~cyt,up!3,dw) + met(name~CPD_3561,loc~cyt,prot) + met(name~WATER,loc~cyt,prot) <-> prot(name~lacZ,loc~cyt,up,dw!1).prot(name~lacZ,loc~cyt,up!1,dw!2).prot(name~lacZ,loc~cyt,up!2,dw!3).prot(name~lacZ,loc~cyt,up!3,dw) + met(name~GALACTOSE,loc~cyt,prot) + met(name~Fructofuranose,loc~cyt,prot)    fwd_RXN_17726, rvs_RXN_17726
  RXN0_7219:              prot(name~lacZ,loc~cyt,up,dw!1).prot(name~lacZ,loc~cyt,up!1,dw!2).prot(name~lacZ,loc~cyt,up!2,dw!3).prot(name~lacZ,loc~cyt,up!3,dw) + met(name~CPD_3785,loc~cyt,prot) + met(name~WATER,loc~cyt,prot) <-> prot(name~lacZ,loc~cyt,up,dw!1).prot(name~lacZ,loc~cyt,up!1,dw!2).prot(name~lacZ,loc~cyt,up!2,dw!3).prot(name~lacZ,loc~cyt,up!3,dw) + met(name~GALACTOSE,loc~cyt,prot) + met(name~D_ARABINOSE,loc~cyt,prot)    fwd_RXN0_7219, rvs_RXN0_7219
  GALACTOACETYLTRAN_RXN:  prot(name~lacA,loc~cyt,up,dw!1).prot(name~lacA,loc~cyt,up!1,dw!2).prot(name~lacA,loc~cyt,up!2,dw) + met(name~Beta_D_Galactosides,loc~cyt,prot) + met(name~ACETYL_COA,loc~cyt,prot) <-> prot(name~lacA,loc~cyt,up,dw!1).prot(name~lacA,loc~cyt,up!1,dw!2).prot(name~lacA,loc~cyt,up!2,dw) + met(name~_6_Acetyl_Beta_D_Galactosides,loc~cyt,prot) + met(name~CO_A,loc~cyt,prot)    fwd_GALACTOACETYLTRAN_RXN, rvs_GALACTOACETYLTRAN_RXN
  TRANS_RXN_24:           prot(name~lacY,loc~mem) + met(name~PROTON,loc~per,prot) + met(name~Alpha_lactose,loc~per,prot) <-> prot(name~lacY,loc~mem) + met(name~PROTON,loc~cyt,prot) + met(name~Alpha_lactose,loc~cyt,prot)    fwd_TRANS_RXN_24, rvs_TRANS_RXN_24
  TRANS_RXN_94:           prot(name~lacY,loc~mem) + met(name~PROTON,loc~per,prot) + met(name~MELIBIOSE,loc~per,prot) <-> prot(name~lacY,loc~mem) + met(name~PROTON,loc~cyt,prot) + met(name~MELIBIOSE,loc~cyt,prot)    fwd_TRANS_RXN_94, rvs_TRANS_RXN_94
  RXN0_7215:              prot(name~lacY,loc~mem) + met(name~PROTON,loc~per,prot) + met(name~CPD_3561,loc~per,prot) <-> prot(name~lacY,loc~mem) + met(name~PROTON,loc~cyt,prot) + met(name~CPD_3561,loc~cyt,prot)    fwd_RXN0_7215, rvs_RXN0_7215
  RXN0_7217:              prot(name~lacY,loc~mem) + met(name~PROTON,loc~per,prot) + met(name~CPD_3785,loc~per,prot) <-> prot(name~lacY,loc~mem) + met(name~PROTON,loc~cyt,prot) + met(name~CPD_3785,loc~cyt,prot)    fwd_RXN0_7217, rvs_RXN0_7217
  RXN_17755:              prot(name~lacY,loc~mem) + met(name~PROTON,loc~per,prot) + met(name~CPD_3801,loc~per,prot) <-> prot(name~lacY,loc~mem) + met(name~PROTON,loc~cyt,prot) + met(name~CPD_3801,loc~cyt,prot)    fwd_RXN_17755, rvs_RXN_17755
end reaction rules

end model
